'################################################
'Property of Draker Laboratories
'Client:
'Project:
'
'################################################


'################# Change Log ###################
'
'Note: Add changes to the top of the list, using the format:
'2001-01-01 ITM [v0.01] Made this change and that change
'################################################


'################# Configuration ################
'Environmental Sensors
'->
' - AC Generation Meter
' - PV Powered Inverters
'
'################################################
PipeLineMode

'################################################


'################# Declarations #################
Const FREQ_REJECTION = _60HZ
Const TOTAL_SLOW_SCANS = 1
Const SLOW_SCAN_INTERVAL_01 = 30
Const SLOW_SCAN_INTERVAL_02 = 30
Const SLOW_SCAN_INTERVAL_03 = 30
Const SLOW_SCAN_INTERVAL_04 = 30
Const CR = CHR(13)
Const LF = CHR(10)
Const CRLF = CHR(13) & CHR(10)
Dim counter As Long

'################################################
'core
Public draker_core_ver As String * 7 = "4.00.03"
Public core_status As Long = 0
Public core_panel_temp As Float
Public core_bat_voltage As Float
Dim core_last_status As Long

Units core_panel_temp = C
Units core_bat_voltage = Vdc

#If TOTAL_SLOW_SCANS > 0
Public core_slow_scans(TOTAL_SLOW_SCANS) As Long
#EndIf

'modbus slave
Const mult_10 = 10
Const mult_100 = 100
Const mult_1000 = 1000
Dim modbus_slave_data(5000) As Long
Dim modbus_slave_bool(8) As Boolean
Public inverter_control As Long

'################################################


'################# Data Tables ##################
DataTable(fifteenMin, TRUE, -1)
  DataInterval(0, 15, MIN, 0)
  #If LoggerType = CR1000
  CardOut(0, -1)
  #EndIf
  
  'core
  Sample(1, draker_core_ver, String)
  Sample(1, core_status, Long)
  Average(1, core_panel_temp, FP2, FALSE)
  Minimum(1, core_bat_voltage, FP2, FALSE, 0)
EndTable 'fifteenMin

'core
DataTable(dataloggerStatus, core_status <> core_last_status, 2000)
  Sample(1, core_status, Long)
  Sample(1, Status.WatchdogErrors, UINT2)
  Sample(1, Status.VarOutOfBound, UINT2)
  Sample(1, Status.SkippedScan, UINT2)
  Sample(1, Status.SkippedSystemScan, UINT2)
  #If TOTAL_SLOW_SCANS > 0
  Sample(TOTAL_SLOW_SCANS, core_slow_scans(), UINT2)
  #EndIf

  Sample(1, Status.Battery, FP2)
  Sample(1, Status.LithiumBattery, FP2)
  Sample(1, Status.Low12VCount, UINT2)
  Sample(1, Status.Low5VCount, UINT2)
EndTable 'dataloggerStatus

'// PASTE TABLE /////////////////////////////////////////////////////////
'################################################


'################ Display Tables ################

'################################################


'################## Functions ###################
'core
Function getCoreStatus() As Long
  Dim status As Long, counter As Long

  status = 0
  If Status.WatchdogErrors > 0 Then status += &H0001
  If Status.VarOutOfBound > 0 Then status += &H0002
  If Status.SkippedScan > 0 Then status += &H0004
  If Status.SkippedSystemScan > 0 Then status += &H0008
  If Status.Battery < 12.3 Then status += &H0100
  If Status.LithiumBattery < 3.3 Then status += &H0200
  If Status.Low12VCount > 0 Then status += &H0400
  If Status.Low5VCount > 0 Then status += &H0800

  #If TOTAL_SLOW_SCANS = 1
  If Status.SkippedSlowScan > 0 Then status += &H0010
  core_slow_scans(1) = Status.SkippedSlowScan

  #ElseIf TOTAL_SLOW_SCANS > 1
  For counter = 1 To TOTAL_SLOW_SCANS
    If Status.SkippedSlowScan(counter) > 0 Then status += (&H0008 << counter)
    core_slow_scans(counter) = Status.SkippedSlowScan(counter)
  Next
  #EndIf

  Return status
EndFunction

'################################################


'################# Main Program #################
BeginProg
  ModBusSlave(502, 57600, 22, modbus_slave_data(), modbus_slave_bool(), 1)
  Scan(6, SEC, 3, 0)
    'core
    PanelTemp(core_panel_temp, FREQ_REJECTION)
    Battery(core_bat_voltage)

    core_last_status = core_status
    core_status = getCoreStatus()
    CallTable(dataloggerStatus)
    
    modbus_slave_data(107) = core_bat_voltage
    modbus_slave_data(108) = core_panel_temp * mult_100
    modbus_slave_data(109) = core_status
    
    If modbus_slave_data(110) <> inverter_control Then
      inverter_control = modbus_slave_data(110)
      modbus_slave_data(110) = inverter_control
    EndIf

    CallTable(fifteenMin)
  NextScan

  #If TOTAL_SLOW_SCANS >= 1
  SlowSequence
  Scan(SLOW_SCAN_INTERVAL_01, Sec, 1, 0)

  NextScan
  EndSequence
  #EndIf

EndProg
