'################################################
'Property of Draker Laboratories
'
' Test Description
'
'################################################

Public test_ver As String = "4.01.00"


'## Configuration ###############################
' PipeLineMode
SequentialMode

Const SRS_CFG_01_DIFF_CH = 1
Const FREQ_REJECTION = _60Hz
'################################################

'## Declarations ################################
Const SP = Chr(32)
Const TB = Chr(9)
Const CR = Chr(13)
Const LF = Chr(10)
Const CRLF = CR & LF

Public srs_voltage_25(2) As Float
Public srs_voltage_250(2) As Float

Dim counter As Long
'################################################

'## Data Tables #################################
DataTable(voltageCompare, TRUE, -1)
  DataInterval(0, 15, MIN, 0)
  #If LoggerType = CR1000
  CardOut(0, -1)
  #EndIf

  Sample(2, srs_voltage_25(), IEEE4)
  Sample(2, srs_voltage_250(), IEEE4)
EndTable 'voltageCompare
'################################################

'## Functions ###################################

'################################################


'## Main Program ################################
BeginProg
  Scan (1,Sec,3,0)

    For counter = 1 To 100
      ExciteV(VX1, counter, 0)
    Next

    VoltDiff(srs_voltage_25(1), 2, mV25C, SRS_CFG_01_DIFF_CH, TRUE, 0, FREQ_REJECTION, 1.0, 0)
    VoltDiff(srs_voltage_250(1), 2, mV250C, SRS_CFG_01_DIFF_CH, TRUE, 0, FREQ_REJECTION, 1.0, 0)

    CallTable(voltageCompare)
  NextScan
EndProg
'################################################
