'################################################
'Property of Draker Laboratories
'Client:
'Project:
'
'################################################


'################# Change Log ###################
'
'Note: Add changes to the top of the list, using the format:
'2001-01-01 ITM [v0.01] Made this change and that change
'################################################


'################# Configuration ################
'Environmental Sensors
'->
' - AC Generation Meter
' - PV Powered Inverters
'
'################################################
PipeLineMode

'################################################


'################# Declarations #################
Const FREQ_REJECTION = _60HZ
Const TOTAL_SLOW_SCANS = 1
Const SLOW_SCAN_INTERVAL_01 = 30
Const SLOW_SCAN_INTERVAL_02 = 30
Const SLOW_SCAN_INTERVAL_03 = 30
Const SLOW_SCAN_INTERVAL_04 = 30
Const CR = CHR(13)
Const LF = CHR(10)
Const CRLF = CHR(13) & CHR(10)
Dim counter As Long

'################################################
'core
Public draker_core_ver As String * 7 = "4.00.03"
Public core_status As Long = 0
Public core_panel_temp As Float
Public core_bat_voltage As Float
Dim core_last_status As Long

Units core_panel_temp = C
Units core_bat_voltage = Vdc

#If TOTAL_SLOW_SCANS > 0
Public core_slow_scans(TOTAL_SLOW_SCANS) As Long
#EndIf

'write to terminal
Public com_port As Long = {32}
Public baud_rate As Long = {9600}
Dim is_open As Boolean = FALSE

Dim data_table_string As String * 100

'################################################


'################# Data Tables ##################
DataTable(fifteenMin, TRUE, -1)
  DataInterval(0, 15, MIN, 0)
  #If LoggerType = CR1000
  CardOut(0, -1)
  #EndIf
  
  'core
  Sample(1, draker_core_ver, String)
  Sample(1, core_status, Long)
  Average(1, core_panel_temp, FP2, FALSE)
  Minimum(1, core_bat_voltage, FP2, FALSE, 0)
EndTable 'fifteenMin

'core
DataTable(dataloggerStatus, core_status <> core_last_status, 2000)
  Sample(1, core_status, Long)
  Sample(1, Status.WatchdogErrors, UINT2)
  Sample(1, Status.VarOutOfBound, UINT2)
  Sample(1, Status.SkippedScan, UINT2)
  Sample(1, Status.SkippedSystemScan, UINT2)
  #If TOTAL_SLOW_SCANS > 0
  Sample(TOTAL_SLOW_SCANS, core_slow_scans(), UINT2)
  #EndIf

  Sample(1, Status.Battery, FP2)
  Sample(1, Status.LithiumBattery, FP2)
  Sample(1, Status.Low12VCount, UINT2)
  Sample(1, Status.Low5VCount, UINT2)
EndTable 'dataloggerStatus

DataTable(debugMessage, TRUE, 100)
  'Sample(1, is_open, Boolean)
  Sample(1, data_table_string, String)
EndTable

'// PASTE TABLE /////////////////////////////////////////////////////////
'################################################


'################ Display Tables ################

'################################################


'################## Functions ###################
'write to terminal
Function writeToTerminal(port As Long, baud as Long, string_to_write As String * 100)
	Const PORT_FORMAT = 0
	Const TXDELAY = 100
	Const BUFFER = 500
	Const SERIAL_TIMEOUT = 0
	Const SERIAL_DELAY = 100
  
  Dim panel_temp_string As String * 5
  Dim bat_voltage_string As String * 5
  
  If is_open = FALSE
    Select Case port
    Case COM1
      SerialOpen(COM1, baud, PORT_FORMAT, TXDELAY, BUFFER)
    Case COM2
      SerialOpen(COM2, baud, PORT_FORMAT, TXDELAY, BUFFER)
    #If LoggerType = CR1000
    Case COM3
      SerialOpen(COM3, baud, PORT_FORMAT, TXDELAY, BUFFER)
    Case COM4
      SerialOpen(COM4, baud, PORT_FORMAT, TXDELAY, BUFFER)
    #EndIf
    Case 32
      SerialOpen(32, baud, PORT_FORMAT, TXDELAY, BUFFER)
      is_open = TRUE
    EndSelect
  EndIf
  
  SerialOut(port, "Hello" & CRLF, "", 0, SERIAL_TIMEOUT)
  SerialOut(port, string_to_write & CRLF, "", 0, SERIAL_TIMEOUT)
  SerialOut(port, FormatFloat(core_panel_temp, "%.2f") & " C" & CRLF, "", 0, SERIAL_TIMEOUT)
  SerialOut(port, FormatFloat(core_bat_voltage, "%.2f") & " Vdc" & CRLF , "", 0, SERIAL_TIMEOUT)
  
EndFunction


'core
Function getCoreStatus() As Long
  Dim status As Long, counter As Long

  status = 0
  If Status.WatchdogErrors > 0 Then status += &H0001
  If Status.VarOutOfBound > 0 Then status += &H0002
  If Status.SkippedScan > 0 Then status += &H0004
  If Status.SkippedSystemScan > 0 Then status += &H0008
  If Status.Battery < 12.3 Then status += &H0100
  If Status.LithiumBattery < 3.3 Then status += &H0200
  If Status.Low12VCount > 0 Then status += &H0400
  If Status.Low5VCount > 0 Then status += &H0800

  #If TOTAL_SLOW_SCANS = 1
  If Status.SkippedSlowScan > 0 Then status += &H0010
  core_slow_scans(1) = Status.SkippedSlowScan

  #ElseIf TOTAL_SLOW_SCANS > 1
  For counter = 1 To TOTAL_SLOW_SCANS
    If Status.SkippedSlowScan(counter) > 0 Then status += (&H0008 << counter)
    core_slow_scans(counter) = Status.SkippedSlowScan(counter)
  Next
  #EndIf
  Return status
EndFunction

'################################################


'################# Main Program #################
BeginProg
  Scan(6, SEC, 3, 0)
    'core
    PanelTemp(core_panel_temp, FREQ_REJECTION)
    Battery(core_bat_voltage)

    core_last_status = core_status
    core_status = getCoreStatus()
    CallTable(dataloggerStatus)
    
    writeToTerminal(com_port, baud_rate, "Hello" & CRLF)
    writeToTerminal(com_port, baud_rate, FormatFloat(core_panel_temp, "%.2f") & " C" & CRLF)
    writeToTerminal(com_port, baud_rate, FormatFloat(core_bat_voltage, "%.2f") & " Vdc" & CRLF)

    CallTable(fifteenMin)
  NextScan

  #If TOTAL_SLOW_SCANS >= 1
  SlowSequence
  Scan(SLOW_SCAN_INTERVAL_01, Sec, 1, 0)

  NextScan
  EndSequence
  #EndIf

EndProg
